OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client (EEG) => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "TP9" => #1
  Channel List = TP9
  Action = Select
  Channel Matching Method = Smart
#0.Signal stream -> Channel Selector "TP10" => #2
  Channel List = TP10
  Action = Select
  Channel Matching Method = Smart
Input - A=#1, Input - B=#2 -> Simple DSP
  Equation = (A+B)*0.5
-> Channel Rename => #4
  New channel names = REF
Input 1=#0.Signal stream, Input 2=#4 -> Signal Merger
-> Channel Selector "6:9;11;12;22:26;28;29;REF"
  Channel List = 6:9;11;12;22:26;28;29;REF
  Action = Select
  Channel Matching Method = Smart
-> Reference Channel => #7
  Channel = REF
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = .5
  High cut frequency (Hz) = 49
  Pass band ripple (dB) = 0.5
-> Signal Decimation
  Decimation factor = 2
-> Common Average Reference => #10
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Time based epoching => #12
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.25
-> Classifier => #13
  Clock frequency (Hz) = 4
  Script = D:/github/VR_BCI/BCI/online/scenario/functions/classifier.py
  ClassLabel = OVTK_StimulationId_Label_00
  nRejection = 5
Input stimulations=#13 -> Command Stream
  Signal stream = openvibeSignal
  Marker stream = commandMarkers
Data=#12 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#7 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Trial manager => #17
  Clock frequency (Hz) = 1
  Script = D:/github/VR_BCI/BCI/online/scenario/functions/trial_manager.py
  Number of test trials = 100
  Number of calibration trials = 20
  Preparation time = 40
  Inter trial time = 5
  Trial Length = 4
  Number of Channels = 13
  stateLabel = OVTK_StimulationId_Label_01
Signal=#0.Signal stream, Stimulation=#17 -> GDF file writer
  Filename = C:/Users/Stimulation/Documents/Mohamad/VR_AdaptiveBCI/Online scenario/data/record-reref-13ch-[$core{date}-$core{time}].gdf
Signal=#10, Stimulation=#17 -> GDF file writer
  Filename = C:/Users/Stimulation/Documents/Mohamad/VR_AdaptiveBCI/Online scenario/data/record-reref-CAR-13ch-[$core{date}-$core{time}].gdf

Trainer
  Clock frequency (Hz) = 1
  Script = D:/github/VR_BCI/BCI/online/scenario/functions/trainer.py
