OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter "Beta (13 - 25Hz)"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 13
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Simple DSP "power"
  Equation = x*x
-> Signal average "average power"
-> Spatial Filter "global Beta" => #4
  Spatial Filter Coefficients = 1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14
  Number of Output Channels = 1
  Number of Input Channels = 14
  Filter matrix file =
#0.Signal stream -> Temporal filter "Alpha (7 - 13Hz)"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> Simple DSP "power"
  Equation = x*x
-> Signal average "average power"
-> Spatial Filter "global Alpha" => #8
  Spatial Filter Coefficients = 1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14
  Number of Output Channels = 1
  Number of Input Channels = 14
  Filter matrix file =
Input - A=#4, Input - B=#8 -> Simple DSP "engagement index" => #9
  Equation = a/b
Clock stimulator => #10
  Interstimulation interval (in sec) = 20
  Stimulation = OVTK_StimulationId_Label_01
-> Run Command
  Stimulation 1 = OVTK_StimulationId_Label_01
  Command 1 = START firefox https://www.youtube.com/watch?v=cCLCuXNXeh0
Clock stimulator => #12
  Interstimulation interval (in sec) = 38
  Stimulation = OVTK_StimulationId_Label_02
-> Run Command
  Stimulation 1 = OVTK_StimulationId_Label_02
  Command 1 = TSKILL firefox
Clock stimulator => #14
  Interstimulation interval (in sec) = 59
  Stimulation = OVTK_StimulationId_Label_03
Input stimulations 1=#10, Input stimulations 2=#12, Input stimulations 3=#14 -> Stimulation multiplexer => #15
Signal=#9, Stimulations=#15 -> EDF File Writer
  Filename = C:/Users/Chris/Documents/3_Uni/1_MSc Neuroengineering/Semester 4/NISE/CalibTrials/test_calib.edf
Input stream=#9, Stimulations stream=#15 -> CSV File Writer
  Filename = C:/Users/Chris/Documents/3_Uni/1_MSc Neuroengineering/Semester 4/NISE/CalibTrials/test_calib.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#14 -> Run Command
  Stimulation 1 = OVTK_StimulationId_Label_03
  Command 1 = TSKILL firefox

0x341d3912 Noise generator
  Channel count = 2
  Sampling frequency = 20
  Generated epoch sample count = 32
  Noise type = Gaussian

Clock stimulator
  Interstimulation interval (in sec) = 62
  Stimulation = OVTK_StimulationId_Label_04
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_04
  Action to perform = Stop
