OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Noise generator
  Channel count = 2
  Sampling frequency = 20
  Generated epoch sample count = 32
  Noise type = Gaussian
-> Simple DSP "here comes your part!" => #1
  Equation = x
Clock stimulator => #2
  Interstimulation interval (in sec) = 20
  Stimulation = OVTK_StimulationId_Label_01
-> Run Command
  Stimulation 1 = OVTK_StimulationId_Label_01
  Command 1 = START firefox https://www.youtube.com/watch?v=cCLCuXNXeh0
Clock stimulator => #4
  Interstimulation interval (in sec) = 39
  Stimulation = OVTK_StimulationId_Label_02
Clock stimulator => #5
  Interstimulation interval (in sec) = 59
  Stimulation = OVTK_StimulationId_Label_03
Input stimulations 1=#2, Input stimulations 2=#4, Input stimulations 3=#5 -> Stimulation multiplexer => #6
Input stream=#1, Stimulations stream=#6 -> CSV File Writer
  Filename = C:/Users/Chris/Documents/3_Uni/1_MSc Neuroengineering/Semester 4/NISE/CalibTrials/test_calib.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Signal=#1, Stimulations=#6 -> EDF File Writer
  Filename = C:/Users/Chris/Documents/3_Uni/1_MSc Neuroengineering/Semester 4/NISE/CalibTrials/test_calib.edf
#5 -> Run Command
  Stimulation 1 = OVTK_StimulationId_Label_03
  Command 1 = TSKILL firefox

Clock stimulator
  Interstimulation interval (in sec) = 38
  Stimulation = OVTK_StimulationId_Label_02
-> Run Command
  Stimulation 1 = OVTK_StimulationId_Label_02
  Command 1 = TSKILL firefox

0x341d3912 Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024

Clock stimulator
  Interstimulation interval (in sec) = 62
  Stimulation = OVTK_StimulationId_Label_04
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_04
  Action to perform = Stop
