OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter "Beta (13 - 25Hz)"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 13
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Simple DSP "power"
  Equation = x*x
-> Signal average "average power"
-> Spatial Filter "global Beta" => #4
  Spatial Filter Coefficients = 1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14
  Number of Output Channels = 1
  Number of Input Channels = 14
  Filter matrix file =
#0.Signal stream -> Temporal filter "Alpha (7 - 13Hz)"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> Simple DSP "power"
  Equation = x*x
-> Signal average "average power"
-> Spatial Filter "global Alpha" => #8
  Spatial Filter Coefficients = 1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14
  Number of Output Channels = 1
  Number of Input Channels = 14
  Filter matrix file =
Input - A=#4, Input - B=#8 -> Simple DSP "engagement index" => #9
  Equation = a/b
-> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Keyboard stimulator => #11
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Input stream=#9, Stimulations stream=#11 -> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
