OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Identity => #1
-> Time based epoching => #2
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Temporal Filter => #3
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
#2 -> Temporal Filter => #4
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
Input - A=#3, Input - B=#4 -> Simple DSP => #5
  Equation = X/Y
Input 1=#1, Input 2=#5 -> Signal Merger => #6
press A to start (label 01) => #7
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Input Signal=#6, Input Stimulations=#7 -> Generic stream writer
  Filename = record-[$core{date}-$core{time}].ov
  Use compression = false
Signal=#6, Stimulations=#7 -> EDF File Writer
  Filename = record-[$core{date}-$core{time}].edf
Input signal=#5, Input stimulations=#7 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
